<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.OpenEphys;assembly=Bonsai.OpenEphys"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="nChannelsPerAnimal" Description="please enter the number of channels that are recorded for each animal" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>32</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>nChanPerAl</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>nChanPerAl</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:AcquisitionBoard">
          <p1:BoardLeds>false</p1:BoardLeds>
          <p1:BoardIndex>-1</p1:BoardIndex>
          <p1:BufferCount>256</p1:BufferCount>
          <p1:SampleRate>SampleRate20000Hz</p1:SampleRate>
          <p1:ExternalFastSettleEnabled>false</p1:ExternalFastSettleEnabled>
          <p1:LowerBandwidth>0.1</p1:LowerBandwidth>
          <p1:UpperBandwidth>7500</p1:UpperBandwidth>
          <p1:DspCutoffFrequency>1</p1:DspCutoffFrequency>
          <p1:DspEnabled>true</p1:DspEnabled>
          <p1:CableDelayA xsi:nil="true" />
          <p1:CableDelayB xsi:nil="true" />
          <p1:CableDelayC xsi:nil="true" />
          <p1:CableDelayD xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>OEData</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions/extractAl.bonsai">
        <animalNumber>0</animalNumber>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Animal1</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions/extractAl.bonsai">
        <animalNumber>1</animalNumber>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Animal2</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions/extractAl.bonsai">
        <animalNumber>2</animalNumber>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Animal3</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions/extractAl.bonsai">
        <animalNumber>3</animalNumber>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Animal4</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OEData</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>